# 1 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/zggd"
;zggd
;avance-version (02/05/31)
;1D sequence with gated decoupling


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

"d11=30m"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*30m"
"MCREST = 30m - 30m"
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1 ze
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  d11 pl12:f2
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2 MCWRK  * 2
LBLF0, MCREST
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  4u cpd2:f2
  d1
  p1 ph1
  go=2 ph31 do:f2
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  MCWRK wr #0
  MCWRK zd 
  lo to LBLF0 times td0

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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;NS: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: zggd,v 1.7 2002/06/12 09:05:22 ber Exp $
