# 1 "C:/Bruker/TOPSPIN/exp/stan/nmr/lists/pp/user/aptsp.ber"
;aptsp.ber
;avance-version (02/05/31)
;attached proton test
;
;S.L. Patt & J.N. Shoolery, J. Magn. Reson. 46, 535-539 (1982)


;$OWNER=stb
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

"d11=30m"

"d20=1s/(cnst2*cnst11)"
;"d22=d20-(p14/2)"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.333333*30m"
"MCREST = 30m - 30m"
    dccorr
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1 ze
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  d11 pl12:f2 
  d11 cpd2:f2
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2 MCWRK  * 2
LBLF0, MCWRK pl1:f1
  MCREST
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  d1
  4u do:f2
  p0 ph1
  d20 pl0:f1
  (p14:sp4 ph2):f1 
  d20 cpd2:f2
  d21
  (p15:sp5 ph3):f1
  d21 
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd 
  lo to LBLF0 times td0

  MCWRK
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  d11 do:f2
exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 1 2 3 1 2 3 0 2 3 0 1 3 0 1 2
ph3=0 1 1 0 1 0 0 1 1 0 0 1 0 1 1 0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p0 : f1 channel - for any flip angle
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                           [30 msec]
;d20: 1/(J(XH))  X, XH2 positive, XH, XH3 negative
;     1/(2J(XH)) X only
;d21: delay for second echo                        [100 usec to 1msec]
;cnst2: = J(XH)
;cnst11: = 1  X, XH2 positive, XH, XH3 negative
;          2  X only
;NS : 4 * n, total number of scans: NS * TD0
;DS : 8
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: apt,v 1.7 2002/06/12 09:04:24 ber Exp $
