# 1 "/u/exp/stan/nmr/lists/pp/zgdc30"
;zgdc30
;avance-version (03/04/17)
;1D sequence with decoupling
;using 30 degree flip angle


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

"d11=30m"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*30m"
"MCREST = 30m - 30m"
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1 ze
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  d11 pl12:f2 
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2 MCWRK  * 2 do:f2
LBLF0, MCREST
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  d11 cpd2:f2
  d1
  p1*0.33 ph1
  go=2 ph31
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  MCWRK do:f2 wr #0
  MCWRK zd 
  lo to LBLF0 times td0

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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;NS: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;$Id: zgdc30,v 1.7.2.1 2003/04/17 16:18:26 ber Exp $
